CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C=0.tif")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C=2.tif")
    Name to assign these images:Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C=1.tif")
    Name to assign these images:Phalloidin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['The DNA channel, e.g. DAPI, is perfect for segmenting individual cells. Given that these cells are well spaced, declumping cells by shape is effective.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,0.1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Ki67 is a nuclear marker evident in nearly all stages of the cell cycle except G_0 that indicates cell proliferation. By segmenting this channel, a threshold is automatically chosen that identifies the pixels that are "positive" for the Ki67 probe. This method will yield inconsistent results if there are no mitotic cells in view, so a minimum threshold value is chosen. This minimum is chosen hueristically, based upon the threshold chosen by this module, e.g. half the chosen threshold.']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
    Select the input image:Ki67
    Name the primary objects to be identified:Ki67
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0002,0.01
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Phalloidin
    Select the method to identify the secondary objects:Propagation
    Select the input image:Phalloidin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0001,0.01
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:Phalloidin
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:10|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notes:['The Ki67 probe and dna stain overlap with each other, so this co-localization can be used to classify cells. This relationship is ennumerated by the RelateObjects module and the labels from one set of objects is mapped into another set of objects.']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
    Parent objects:Nuclei
    Child objects:Ki67
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:11|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notes:['After the relationship between objects has been ennumerated, the FilterObjects module can transform this relationship into a binary relationship, i.e. 0 if there is no Ki67 and 1 if there is Ki67.']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
    Select the objects to filter:Nuclei
    Name the output objects:Ki67PosNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_Ki67_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:12|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notes:['In addition to colocalization, the intensity of the PH3 probe can be used to classify cells. The intensity can be measured within each nuclei object.']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
    Select images to measure:DAPI, Ki67
    Select objects to measure:Ki67PosNuclei

OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:DAPIOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FF40
    Select objects to display:Nuclei

OverlayOutlines:[module_num:14|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notes:['The intensity measurements can be exported into a spreadsheet, but sometimes a useful way to process the measurements is to see them overlayed on top of the objects of interest, in this the nuclei.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Ki67
    Name the output image:Ki67Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FF40
    Select objects to display:Nuclei

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Phalloidin
    Name the output image:PhalloidinOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#F600FB
    Select objects to display:Phalloidin
    Select outline color:Green
    Select objects to display:Nuclei

DisplayDataOnImage:[module_num:16|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notes:['We’ll choose a threshold for the intensity that determines if a cell is mitotic or not. The MaxIntensity is an effective measurement, since the probe itself is so specific.']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
    Display object or image measurements?:Object
    Select the input objects:Ki67PosNuclei
    Measurement to display:Intensity_MaxIntensity_Ki67
    Select the image on which to display the measurements:Ki67Overlay
    Text color:magenta
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:17|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
    Display object or image measurements?:Object
    Select the input objects:Phalloidin
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:PhalloidinOverlay
    Text color:magenta
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:18|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:DAPI
    Text color:magenta
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:No
    Font weight:normal

ClassifyObjects:[module_num:19|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notes:['From the data displayed image, the value of 0.2 was chosen as an appropriate threshold for determining Ki67+ cells. This approach contrasts with the colocalization method to classify cells that was done by the RelateObjects module. The 0.2 threshold parallels the threshold automatically chosen by the IdentifyPrimaryObjects module on the Ki67 image.']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
    Make classification decision based on:Single measurement
    Hidden:1
    Hidden:1
    Select the object to be classified:Ki67PosNuclei
    Select the measurement to classify by:Intensity_MaxIntensity_Ki67
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.2
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Ki67Neg,Ki67Pos
    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Default Output Folder|None
    Rules or classifier file name:None
    Allow fuzzy feature matching?:No

CalculateMath:[module_num:20|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notes:['The module is for convenience. The percentage of cells positive for Ki67 could be calculated from the exported spreadsheet. However, it is a simple enough metric that it can be directly calculated in the pipeline.']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
    Name the output measurement:PercentPositive
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_Ki67PosNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Nuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:Phalloidin
    Select method for constructing file names:From image filename
    Select image name for file prefix:Phalloidin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:PhalloidinOnly
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/cisR monolayer dapi phalloidin ki67 data files
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:DAPIOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Phalloidin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:PhalloidinOverlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/cisR monolayer dapi phalloidin ki67 data files
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:PhalloidinOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Phalloidin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:MaskPhalloidinOverlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/cisR monolayer dapi phalloidin ki67 data files
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Phalloidin|AreaShape_FormFactor,Phalloidin|AreaShape_Eccentricity,Phalloidin|AreaShape_Perimeter,Phalloidin|AreaShape_EquivalentDiameter,Phalloidin|AreaShape_Area,Phalloidin|AreaShape_Solidity,Image|FileName_Ki67,Image|FileName_DAPI,Image|Count_Nuclei,Image|Count_Ki67PosNuclei,Image|Count_Ki67,Image|Math_PercentPositive,Nuclei|AreaShape_EquivalentDiameter,Nuclei|AreaShape_Area,Nuclei|AreaShape_Perimeter,Nuclei|AreaShape_Solidity,Nuclei|AreaShape_Eccentricity
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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