CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "COMPOSITE")
    Name to assign these images:Spheroid
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Spheroid
    Name the primary objects to be identified:Spheroid
    Typical diameter of objects, in pixel units (Min,Max):250,450
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Spheroid
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Spheroid|AreaShape_Zernike_4_2,Spheroid|AreaShape_Zernike_4_0,Spheroid|AreaShape_Zernike_4_4,Spheroid|AreaShape_Zernike_3_3,Spheroid|AreaShape_Zernike_3_1,Spheroid|AreaShape_Zernike_2_0,Spheroid|AreaShape_Zernike_2_2,Spheroid|AreaShape_Zernike_7_7,Spheroid|AreaShape_Zernike_7_5,Spheroid|AreaShape_Zernike_7_1,Spheroid|AreaShape_Zernike_7_3,Spheroid|AreaShape_Zernike_6_2,Spheroid|AreaShape_Zernike_6_0,Spheroid|AreaShape_Zernike_6_6,Spheroid|AreaShape_Zernike_6_4,Spheroid|AreaShape_Zernike_5_1,Spheroid|AreaShape_Zernike_5_5,Spheroid|AreaShape_Zernike_5_3,Spheroid|AreaShape_Zernike_8_2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
    Data to export:Spheroid
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
